PsychoPy2experiment version="1.83.01"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[1.000,1.000,1.000]
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = new bart 12-9-15
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    CodeComponent CheckKeys
      Begin Experiment:
        #initialize maximum number of pumps
        maxPumps = 999

        #initialize scoring variables
        #round score
        rscore = 0
        #last round score
        lscore = 0
        #total score
        tscore = 0
      Begin Routine:
        #set the maximum number of pumps to be a random number between 1 and the maximum pumsp for the balloon
        maxPumps = randint(1, balloonrisk)

        #reset round score to 0
        rscore = 0
      End Routine:
        #set last round score to current round score
        lscore = rscore
        #add current round score to total score
        tscore += rscore
      Each Frame:
        if event.getKeys(['space']):
            nPumps+=1
            rscore +=5
            if nPumps>maxPumps:
                popped=True
                continueRoutine=False
                rscore = 0
    CodeComponent UpdatePoints
      Begin Experiment:
        bankedEarnings=0.0
        lastBalloonEarnings=0.0
        thisBalloonEarnings=0.0
      End Routine:
        #calculate cash 'earned'
        if popped:
          thisBalloonEarnings=0.0
          lastBalloonEarnings=0.0
        else:   lastBalloonEarnings=thisBalloonEarnings
        bankedEarnings = bankedEarnings+lastBalloonEarnings
      Each Frame:
        thisBalloonEarnings=nPumps*5
    CodeComponent balloonsize
      Begin Experiment:
        balloonSize=0.08
        balloonMsgHeight=0.01
      Begin Routine:
        #balloon image's starting size
        balloonSize=0.08
        popped=False
        nPumps=0
      End Routine:
        #save data
        trials.addData('nPumps', nPumps)
        trials.addData('size', balloonSize)
        trials.addData('earnings', thisBalloonEarnings)
        trials.addData('popped', popped)
      Each Frame:
        balloonSize=0.1+nPumps*0.015
    KeyboardComponent BankButton
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent polygon_balloon
      fillColor = $[1,1,1]
      pos = [0.055, -0.08]
      lineColor = $[-1,-1,-1]
      startVal [time (s)] = 0.0
      size = [0.06, 0.06]
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    PolygonComponent polygon_pressToPump
      fillColor = $[1,1,1]
      pos = [0.055, -0.2124]
      lineColor = $[-1,-1,-1]
      startVal [time (s)] = 0.0
      size = [0.55, 0.2]
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    PolygonComponent polygon_totalBanked
      fillColor = $[1,1,1]
      pos = [0.55, 0.0]
      lineColor = $[-1,-1,-1]
      startVal [time (s)] = 0.0
      size = [0.3, 0.2]
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    PolygonComponent polygon_lastRoundBanked
      fillColor = $[1,1,1]
      pos = [0.55, -.4]
      lineColor = $[-1,-1,-1]
      startVal [time (s)] = 0.0
      size = [0.3, 0.2]
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    PolygonComponent polygon_pressToBank
      fillColor = $[1,1,1]
      pos = [-.45, -0.2124]
      lineColor = $[-1,-1,-1]
      startVal [time (s)] = 0.0
      size = [0.3, 0.2]
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    ImageComponent BalloonImage
      pos [set every frame] = $[.055, -0.046+balloonSize/2]
      startVal [time (s)] = 0.0
      image [set every repeat] = $balloonpic
      size [set every frame] = $balloonSize
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    TextComponent pressToPump
      color = black
      pos = [0.055, -0.2124]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Press the Spacebar to
        pump up the balloon
    TextComponent totalBanked
      color = black
      text [set every frame] = $u"Total Earned:\n0%02.f points" %tscore
      pos = [0.55, 0.0]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent lastRoundBanked
      color = black
      text [set every frame] = $u"Last Balloon:\n0%02.f points" %lscore
      pos = [0.55, -.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent pressToBank
      color = black
      pos = [-.45, -0.2124]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text [set every frame]:
        Press Enter to
        Collect Points
  Routine FinalScore
    TextComponent finalscore
      color = black
      text [set every repeat] = $u"You earned a total of\n%2.f points!" %tscore
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent DoneKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Feedback
    CodeComponent code
      Begin Experiment:
        #when the balloon pops, it will play the bang.wav file in the folder
        #when the user banks points, it will play the cashregister.wav file in the folder
        from psychopy import sound
        bang = sound.Sound("bang.wav")
        cash = sound.Sound("cashregister.wav")
      Begin Routine:
        if popped==True:
          bang.play()
        else:
          cash.play()
  Routine Instructions
    TextComponent text
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.065
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      text:
        Throughout the task, you will be presented with 90 balloons, one at a time. For each balloon you can press the Spacebar button to pump and increase the size of the balloon. You will accumulate 5 points in a temporary bank for each pump. You will not be shown the amount you have accumulated in your temporary bank. At any point, you can stop pumping up the balloon and press the Enter button. Pressing the Enter button will start you on the next balloon and will transfer the accumulated points from your temporary bank to your permanent bank labeled “Total Earned.” The amount you earned on the previous balloon is shown in the box labeled “Last Balloon.” It is your choice to determine how much to pump up the balloon, but be aware that at some point the balloon will explode. The explosion point varies across balloons, ranging from the first pump to enough pumps to make the balloon fill the entire computer screen. If the balloon explodes before you press the Enter button to collect the accumulated points, then you move on to the next balloon and all points in your temporary bank are lost. Exploded balloons do not affect the points accumulated in your permanent bank.

        Press SPACEBAR to start.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialtypes.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'imageFile': u'redBalloon.png'},
      {u'imageFile': u'greenBalloon.png'},
      {u'imageFile': u'blueBalloon.png'},
      {u'imageFile': u'redBalloon.png'}]
    Routine trial
    Routine Feedback
  LoopTerminator trials
  Routine FinalScore
